---
API: 2.1
OpenSesame: 3.3.9
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Visual World Task with Mouse Click"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set psychopy_suppress_warnings yes
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/Chao/Desktop/eyelink_plugin_OpenSesame/OpenSesame_examples/OpenSesame_VW_Click"
set disable_garbage_collection yes
set description "This example experiment illustrates how to program a Visual World type task with OpenSesame and the EyeLink plugin."
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#ffffff"

define inline_script MSG_blank_screen
	set description "Executes Python code"
	___run__
	# We need a time offset to proper use a message to mark the onset of the stimulus_display screen
	
	time_offset = int(self.time() - var.time_blank_screen)
	exp.eyelink.sendMessage('%d blank_screen' % time_offset)
	__end__
	set _prepare ""

define inline_script MSG_mouse_response
	set description "Executes Python code"
	___run__
	# Send a message to record response time and which image was clicked
	exp.eyelink.sendMessage('Mouse_click %s' % str(var.cursor_roi))
	
	# check if the target has been clicked
	var.acc = 0
	if var.cursor_roi == 'tar': 
		var.acc = 1
	
	
	# The el_stopRecording node will automatically log the variables OpenSesame logs
	# by default. But there are custom variables that you need to specify in the 
	# OpenSesame logger. We need to log those variables as well.vars
	
	exp.eyelink.sendMessage('!V TRIAL_VAR click_acc %s' % str(var.acc))
	__end__
	set _prepare ""

define inline_script MSG_stimulus_display
	set description "Executes Python code"
	___run__
	# We need a time offset to proper use a message to mark the onset of the stimulus_display screen
	
	time_offset = int(self.time() - var.time_stimulus_display)
	exp.eyelink.sendMessage('%d stimulus_display' % time_offset)
	
	# Send over messages to record teh interest areas, and the image paths
	# for Data Viewer visualization purposes
	pos = xy_circle(n=4, rho = 250)  # positions of the images
	img_w, img_h =[240, 240]  # image width and height
	
	img_labels = ['tar', 'dis_1', 'dis_2', 'dis_3']
	
	# position index for the images (tar, dis_1, dis_2, dis_3)
	pos_index = [var.target_loc-1, 
	             var.distractor_1_loc-1, 
	             var.distractor_2_loc-1, 
	             var.distractor_3_loc-1]
	
	# name of the image files 
	img_files = [var.target_img, 
	             var.distractor_1_img, 
	             var.distractor_2_img, 
	             var.distractor_3_img]
	
	# Clear the screen in Data Viewer
	exp.eyelink.sendMessage('!V CLEAR_SCREEN 128 128 128')
	
	for i in range(4):
	    im_x, im_y = pos[pos_index[i]]  # image position x, y
	
	    # interest area index (starts from 1)
	    ia_index = i + 1
	    # interest area img_label
	    ia_label = img_labels[i]
	    # image position in the typical coordinates in computer graphics
	    ia_left = int(im_x - img_w/2 + var.width/2) 
	    ia_top = int(im_y - img_h/2 + var.height/2)
	    ia_right = int(im_x + img_w/2 + var.width/2)
	    ia_bottom = int(im_y + img_h/2 + var.height/2)
	    
	    # for precise timing, include a time offset in the Interest area message 
	    msg_offset = int(self.time() - var.time_stimulus_display)
	    # construct and send the Interest Area messages
	    ia_msg_pars = (msg_offset, ia_index, ia_left, ia_top, ia_right, ia_bottom, ia_label)
	    ia_msg = '%d !V IAREA RECTANGLE %d %d %d %d %d %s' % ia_msg_pars
	    exp.eyelink.sendMessage(ia_msg)
	    
	    # for precise timing, include a time offset in the IMGLOAD message
	    msg_offset = int(self.time() - var.time_stimulus_display)
	
	    # construct and send the IMGload message
	    # Data Viewer will use this message to draw the images when visualizing data
	    img_path = '../images/' + img_files[i]
	    img_x = im_x + var.width/2
	    img_y = im_y + var.height/2
	    imgload_msg = '%d !V IMGLOAD CENTER %s %d %d'%(msg_offset, img_path, img_x, img_y)
	    exp.eyelink.sendMessage(imgload_msg)
	__end__
	set _prepare ""

define inline_script MSG_target_word
	set description "Executes Python code"
	___run__
	# wait for the onset of the target word, then should the mouse cursor
	clock.sleep(var.target_word_onset_time)
	
	# send a message to let the tracker know the onset of the target word
	exp.eyelink.sendMessage('target_word_onset')
	
	# reset the mouse cursor to the center of the screen
	my_mouse = mouse()
	my_mouse.set_pos(pos=(0,0))
	__end__
	set _prepare ""

define sampler audio_stream
	set volume 1
	set stop_after 0
	set sample "[sound_file]"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad blank_screen
	set duration 0
	set description "Displays stimuli"

define loop block
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 target_img "grapes.bmp"
	setcycle 0 target_loc 2
	setcycle 0 distractor_1_img "sun.bmp"
	setcycle 0 distractor_1_loc 3
	setcycle 0 distractor_2_img "umbrella.bmp"
	setcycle 0 distractor_2_loc 4
	setcycle 0 distractor_3_img "shoe.bmp"
	setcycle 0 distractor_3_loc 1
	setcycle 0 sound_file "click_grapes.wav"
	setcycle 0 target_word_onset_time 845
	setcycle 1 target_img "grapes.bmp"
	setcycle 1 target_loc 3
	setcycle 1 distractor_1_img "sun.bmp"
	setcycle 1 distractor_1_loc 4
	setcycle 1 distractor_2_img "umbrella.bmp"
	setcycle 1 distractor_2_loc 1
	setcycle 1 distractor_3_img "shoe.bmp"
	setcycle 1 distractor_3_loc 2
	setcycle 1 sound_file "click_grapes.wav"
	setcycle 1 target_word_onset_time 845
	setcycle 2 target_img "grapes.bmp"
	setcycle 2 target_loc 4
	setcycle 2 distractor_1_img "sun.bmp"
	setcycle 2 distractor_1_loc 1
	setcycle 2 distractor_2_img "umbrella.bmp"
	setcycle 2 distractor_2_loc 2
	setcycle 2 distractor_3_img "shoe.bmp"
	setcycle 2 distractor_3_loc 3
	setcycle 2 sound_file "click_grapes.wav"
	setcycle 2 target_word_onset_time 845
	setcycle 3 target_img "grapes.bmp"
	setcycle 3 target_loc 1
	setcycle 3 distractor_1_img "sun.bmp"
	setcycle 3 distractor_1_loc 2
	setcycle 3 distractor_2_img "umbrella.bmp"
	setcycle 3 distractor_2_loc 3
	setcycle 3 distractor_3_img "shoe.bmp"
	setcycle 3 distractor_3_loc 4
	setcycle 3 sound_file "click_grapes.wav"
	setcycle 3 target_word_onset_time 845
	run trial_sequence

define el_CamSetup el_CamSetup
	set el_calib_type HV9
	set el_calib_repeat_first yes
	set el_calib_randomize yes
	set el_calib_pacing 1000
	set el_calib_force_manual no
	set el_cal_ver_proportion 0.6
	set el_cal_target_type AnimationVideo
	set el_cal_target_file "w_popflakes100.avi"
	set el_cal_hor_proportion 0.88
	set description "Adjust the camera and calibrate the tracker"

define el_Connect el_Connect
	set el_tracking_mode "PUPIL-CR"
	set el_tracker_version "EyeLink 1000 Plus"
	set el_sampling_rate 500
	set el_saccade_sensitivity HIGH
	set el_pupil_size AREA
	set el_pupil_detection ELLIPSE
	set el_mount_usage Remote
	set el_link_filter STANDARD
	set el_ip "100.1.1.1"
	set el_file_filter EXTRA
	set el_eye_to_track RIGHT
	set el_eye_event_data GAZE
	set el_edf_folder_name edf_data
	set el_dummy_mode no
	set el_camera_mount Desktop
	set description "Connect to the EyeLink tracker."

define el_Disconnect el_Disconnect
	set description "Disconnect from the EyeLink tracker."

define el_DriftCheck el_DriftCheck
	set el_force_drift_correct no
	set el_drift_tar_y 0
	set el_drift_tar_x 0
	set el_dc_use_custom_target yes
	set el_dc_use_animation_target no
	set el_dc_target_type SameAsCalibration
	set el_dc_target_img "FIXATION.bmp"
	set el_dc_target_file "FIXATION.bmp"
	set el_allow_setup yes
	set description "Drift-correction/check"

define el_StartRecording el_StartRecording
	set el_recording_status_msg "Current trial number is [count_el_StartRecording]"
	set el_link_data_samples yes
	set el_link_data_events yes
	set el_file_data_samples yes
	set el_file_data_events yes
	set description "Start recording and send a recording status message to the Host"

define el_StopRecording el_StopRecording
	set el_log_essential_vars yes
	set description "stop recording"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run task_instruction always
	run el_Connect always
	run el_CamSetup always
	run block always
	run el_Disconnect always

define logger log_behavioral_response
	set description "Logs experimental data"
	set auto_log yes

define mouse_response mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad stimulus_display
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define advanced_delay preview_objects
	set jitter_mode Uniform
	set jitter 0
	set duration 1000
	set description "Waits for a specified duration"

define inline_script sti_preparation
	set description "Executes Python code"
	___run__
	pos = xy_circle(n=4, rho = 250)  # possible image positions on a virtual circle
	
	img_w, img_h =[240, 240]  # width and height of the image
	
	# get the canvas on which the objects are shown
	sti = items['stimulus_display'].canvas
	
	# position index for the images (tar, dis_1, dis_2, dis_3)
	pos_index = [var.target_loc-1, 
	             var.distractor_1_loc-1, 
	             var.distractor_2_loc-1, 
	             var.distractor_3_loc-1]
	
	# image labels on the sketchpad
	img_labels = ['tar', 'dis_1', 'dis_2', 'dis_3']
	
	# clear the Host screen
	exp.eyelink.sendCommand('clear_screen 0')
	
	for i in range(4):
	    s = img_labels[i]
	    # set image position on the canvas
	    sti[s].x, sti[s].y = pos[pos_index[i]]
	
	    # draw landmarks for the images on the Host PC screen
	    left = int(sti[s].x - img_w/2 + var.width/2) 
	    top = int(sti[s].y - img_h/2 + var.height/2)
	    right = int(sti[s].x + img_w/2 + var.width/2)
	    bottom = int(sti[s].y + img_h/2 + var.height/2)
	    
	    # draw landmarks on the the PC screen
	    landmark_msg = 'draw_box %d %d %d %d 15' % (left, top, right, bottom)
	    exp.eyelink.sendCommand(landmark_msg)
	    
	    # label the landmarks with tar, dis_1, dis_2, dis_3
	    exp.eyelink.sendCommand('draw_text %d %d 15 %s'%(left + 120, top + 120, s))
	__end__
	set _prepare ""

define sketchpad stimulus_display
	set duration 0
	set description "The visual world display"
	draw image center=1 file="fixation.bmp" scale=1 show_if=always x=0 y=0 z_index=0
	draw image center=1 file="[target_img]" name=tar scale=1 show_if=always x=-240 y=-240 z_index=0
	draw image center=1 file="[distractor_1_img]" name=dis_1 scale=1 show_if=always x=240 y=-240 z_index=0
	draw image center=1 file="[distractor_2_img]" name=dis_2 scale=1 show_if=always x=240 y=240 z_index=0
	draw image center=1 file="[distractor_3_img]" name=dis_3 scale=1 show_if=always x=-240 y=240 z_index=0

define sketchpad task_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="TASK INSTRUCTIONS<br /><br /><br/><br/><br />This example script shows how to program a Visual World type task <br/>with OpenSesame and the EyeLink plugin.<br /><br />Please present your task instructions here. <br/>For demo purposes, please click the grapes when you heard grapes in the sentence.<br /><br /><br/><br/>Press any key to start..." x=21 y=6 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run el_DriftCheck always
	run el_StartRecording always
	run sti_preparation always
	run stimulus_display always
	run MSG_stimulus_display always
	run preview_objects always
	run audio_stream always
	run MSG_target_word always
	run mouse_response always
	run MSG_mouse_response always
	run blank_screen always
	run MSG_blank_screen always
	run log_behavioral_response always
	run el_StopRecording always

