---
API: 2.1
OpenSesame: 3.3.9b1
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title picture
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set psychopy_suppress_warnings yes
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/chao/Downloads/eyelink_plugin_OpenSesame/OpenSesame_examples/OpenSesame_picture"
set disable_garbage_collection yes
set description "This example experiment illustrates how to program a free viewing task with OpenSesame and the EyeLink plugin."
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#ffffff"

define inline_script MSG_keyboard_response
	set description "Executes Python code"
	___run__
	# We need a time offset to proper use a message to mark the onset of the stimulus_display screen
	exp.eyelink.sendMessage('keyboard_resp')
	
	# pretending that we are recording reaction time here
	RT = int(self.time() - var.time_stimulus_display)
	
	# store the Reaction time in the EyeLink EDF data file by sending a special
	# "!V TRIAL_VAR" message. The message should contain the variable name and its value 
	exp.eyelink.sendMessage('!V TRIAL_VAR response_time %d' % RT)
	__end__
	set _prepare ""

define inline_script MSG_stimulus_display
	set description "Executes Python code"
	___run__
	# We need a time offset to proper use a message to mark the onset of the stimulus_display screen
	
	time_offset = int(self.time() - var.time_stimulus_display)
	exp.eyelink.sendMessage('%d stimulus_display' % time_offset)
	
	# Send another message to let Data Viewer know where to load the background image during 
	# visualization; this require a special "!V IMGLOAD CENTER" message
	img_path = '../images/' + var.image
	img_x = var.width/2
	img_y = var.height/2
	imgload_msg = '%d !V IMGLOAD CENTER %s %d %d'%(time_offset, img_path, img_x, img_y)
	exp.eyelink.sendMessage(imgload_msg)
	__end__
	set _prepare ""

define loop block
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 trial 1
	setcycle 0 image "grapes.bmp"
	setcycle 1 trial 2
	setcycle 1 image "shoe.bmp"
	setcycle 2 trial 3
	setcycle 2 image "grapes.bmp"
	setcycle 3 trial 4
	setcycle 3 image "umbrella.bmp"
	run trial_sequence

define el_CamSetup el_CamSetup
	set el_calib_type HV9
	set el_calib_repeat_first yes
	set el_calib_randomize yes
	set el_calib_pacing 1000
	set el_calib_force_manual no
	set el_cal_ver_proportion 0.83
	set el_cal_target_type Default
	set el_cal_target_file "w_popflakes100.avi"
	set el_cal_hor_proportion 0.88
	set description "Adjust the camera and calibrate the tracker"

define el_Connect el_Connect
	set el_tracking_mode "PUPIL-CR"
	set el_tracker_version "EyeLink 1000 Plus"
	set el_sampling_rate 500
	set el_saccade_sensitivity HIGH
	set el_pupil_size AREA
	set el_pupil_detection ELLIPSE
	set el_mount_usage Remote
	set el_link_filter STANDARD
	set el_ip "100.1.1.1"
	set el_file_filter EXTRA
	set el_eye_to_track RIGHT
	set el_eye_event_data GAZE
	set el_edf_folder_name edf_data
	set el_dummy_mode no
	set el_camera_mount Desktop
	set description "Connect to the EyeLink tracker."

define el_Disconnect el_Disconnect
	set description "Disconnect from the EyeLink tracker."

define el_DriftCheck el_DriftCheck
	set el_force_drift_correct no
	set el_drift_tar_y 0
	set el_drift_tar_x 0
	set el_dc_use_custom_target yes
	set el_dc_use_animation_target no
	set el_dc_target_type SameAsCalibration
	set el_dc_target_img "FIXATION.bmp"
	set el_dc_target_file "FIXATION.bmp"
	set el_allow_setup yes
	set description "Drift-correction/check"

define el_StartRecording el_StartRecording
	set el_recording_status_msg "Current image file is [image]"
	set el_link_data_samples yes
	set el_link_data_events yes
	set el_file_data_samples yes
	set el_file_data_events yes
	set description "Start recording and send a recording status message to the Host"

define el_StopRecording el_StopRecording
	set el_log_essential_vars yes
	set description "stop recording"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run task_instruction always
	run el_Connect always
	run el_CamSetup always
	run block always
	run el_Disconnect always

define inline_script host_backdrop_img
	set description "Executes Python code"
	___run__
	# This inline script will show a backdrop on the Host PC during recording
	# put this script at the beginning of each trial, so it won't affect trial
	# event timing'
	
	import PIL.Image as PIL_Image
	import pylink
	#backdrop image on the Host PC
	img = pool[var.image]
	img = PIL_Image.open(img)
	w,h = img.size
	im_pixels = img.load()
	# use the list comprehension trick to convert all image pixels into a <pixel> format
	# supported by the Host PC, pixels = [line1, ...lineH], line = [pix1,...pixW], pix=(R,G,B)
	pixels = [[im_pixels[i, j] for i in range(w)] for j in range(h)]
	exp.eyelink.sendCommand('clear_screen 0') # clear the host screen
	# call the bitmapBackdrop() command to show backdrop image on the Host
	# arguments: width, height, pixel, crop_x, crop_y, crop_width, crop_height, x, y on Host, option
	pos_x = int(var.width/2.0 - w/2.0)
	pos_y = int(var.height/2 - h/2.0)
	exp.eyelink.bitmapBackdrop(w, h, pixels, 0, 0, w, h, pos_x, pos_y, pylink.BX_MAXCONTRAST)
	
	# show a backdrop image on the Host screen, imageBackdrop() the recommended
	# function, if you do not need to scale the image on the Host
	# parameters: image_file, crop_x, crop_y, crop_width, crop_height,
	#             x, y on the Host, drawing options
	#
	# img_path = pool[var.image]
	# el_tracker.imageBackdrop(img_path, 0, 0, scn_width, scn_height,
	#                          pylink.BX_MAXCONTRAST)
	__end__
	set _prepare ""

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define sketchpad stimulus_display
	set duration 0
	set description "The visual world display"
	draw image center=1 file="[image]" name=tar scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad task_instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="TASK INSTRUCTIONS<br /><br /><br/><br/><br />This example script shows how to program a Free Viewing task <br/>with OpenSesame and the EyeLink plugin.<br /><br />A picture will be shown on each trial; press any key to the next trial.<br /><br /><br/><br/>Press any key to start..." x=21 y=6 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run host_backdrop_img always
	run el_DriftCheck always
	run el_StartRecording always
	run stimulus_display always
	run MSG_stimulus_display always
	run keyboard_response always
	run MSG_keyboard_response always
	run el_StopRecording always

